// "BatchProcessFolders"
//
// This macro batch processes all the files in a folder and any
// subfolders in that folder. In this example, it runs the Subtract 
// Background command of TIFF files. For other kinds of processing,
// edit the processFile() function at the end of this macro.

   requires("1.33s"); 
   dir = getDirectory("Choose a Directory ");
   setBatchMode(true);
   count = 0;
   countFiles(dir);
   n = 0;
   processFiles(dir);
   print(count+" files processed");
   
   function findFolders(dir) {
      list = getFileList(dir);
      for (i=0; i<list.length; i++) {
          if (endsWith(list[i], "results/"))
              countFiles(""+dir+list[i]);
          else if (endsWith(list[i], "/"))
              findFolders(""+dir+list[i]);
          else
              count++;
      }
  }

   function countFiles(dir) {
      list = getFileList(dir);
      for (i=0; i<list.length; i++) 
          count++;
  }

   function processFiles(dir) {
      list = getFileList(dir);
      for (i=0; i<list.length; i++) {
          if (endsWith(list[i], "results/")){
	 for (i=0; i<list.length; i++) {
         	   if (endsWith(list[i], "/"))
               else {
                   showProgress(n++, count);
                   path = dir+list[i];
                   processFile(path);
         	   }
             }
          }

          else if (endsWith(list[i], "/"))
              processFiles(""+dir+list[i]);
          else
             showProgress(n++, count);
             path = dir+list[i];
             processFile(path);
      }
  }

  function processFile(path) {
  	   print(0);
       if (endsWith(path, "prob_map_tum_8_subtile.tiff")) { //tif or tiff
           open(path);
           run("Median...", "radius=0.5");
           setAutoThreshold("Default dark");
           run("32-bit");
           //run("Threshold...");
           setThreshold(46259.0000, 1000000000000000000000000000000.0000);
           run("Convert to Mask");
           run("Close");
           name=split(path, "..");
           saveAs(name[0]+"_post");
           close();
      }
  }

